# general configuration for control of the avesta THz
# setup by internal modbus lock-in and avesta delay line

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    dds600_delay_line:
        module.Class: 'motor.thorlabs_brushless_delay_line.thorlabsDelay'
        serial_number_controller: 73139754
        kinesis_path: 'C:\\Program Files\\Thorlabs\\Kinesis'

    sr830_lock_in:
        module.Class: 'sr830_lockin.Sr830LockIn'
        com_port_lock_in: 'ASRL6::INSTR'

logic:
    lock_in_logic:
        module.Class: 'lockin_logic.LockInLogic'
        connect:
            lock_in: 'sr830_lock_in'
            delay_logic: 'delay_line_logic'
            savelogic: 'savelogic'

    delay_line_logic:
        module.Class: 'delay_line_logic.DelayLineLogic'
        connect:
            motor: 'dds600_delay_line'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:\\Data\\Prosnikov\\'
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    delaygui:
        module.Class: 'delay_line.delay_line_gui.DelayLineGui'
        connect:
            delaylogic: 'delay_line_logic'

    lock_in_gui:
        module.Class: 'lock_in_gui.LockInGui'
        connect:
            lockinlogic: 'lock_in_logic'