# general configuration for control of the avesta THz
# setup by internal modbus lock-in and avesta delay line

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

# devices in COM ports could be seen in device manager
# e.g. 'ASRL7::INSTR' is COM 7. You always have to provide quotes!

hardware:
    m425_gaussmeter:
        module.Class: 'm425_gaussmeter_lakeshore.GaussmeterLakeshore'
        com_port_gaussmeter: 'ASRL7::INSTR'

#     sr830_lock_in:
#         module.Class: 'sr830_lockin.Sr830LockIn'
#         com_port_lock_in: 'ASRL6::INSTR'

logic:
    gaussmeter_logic:
        module.Class: 'gaussmeter_logic.GaussmeterLogic'
        connect:
            gaussmeter: 'm425_gaussmeter'
#
#     delay_line_logic:
#         module.Class: 'delay_line_logic.DelayLineLogic'
#         connect:
#             motor: 'ims600_delay_line'
#
#     savelogic:
#         module.Class: 'save_logic.SaveLogic'
#         win_data_directory: 'C:\\Data\\Prosnikov\\'
#         unix_data_directory: 'Data/'
#         log_into_daily_directory: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

#     delaygui:
#         module.Class: 'delay_line.delay_line_gui.DelayLineGui'
#         connect:
#             delaylogic: 'delay_line_logic'
#
#     lock_in_gui:
#         module.Class: 'lock_in_gui.LockInGui'
#         connect:
#             lockinlogic: 'lock_in_logic'